<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.5.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:Bonsai.Pylon;assembly=Bonsai.Pylon"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:scr="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>Experiment name</Name>
        <Description />
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Directory" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>E:\test\</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Repeat" />
            </Expression>
            <Expression xsi:type="ReplaySubject">
              <Name>DirName</Name>
              <BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:PylonCapture">
          <p1:SerialNumber>40083936</p1:SerialNumber>
          <p1:ParameterFile>C:\Code\WideField\BaslerConfig\BehaviorCam1.pfs</p1:ParameterFile>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:ElementIndex" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:ImageWriter">
          <cv:Path>\\.\pipe\video1</cv:Path>
          <cv:Suffix>None</cv:Suffix>
          <cv:Overwrite>false</cv:Overwrite>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:PylonCapture">
          <p1:SerialNumber>40092112</p1:SerialNumber>
          <p1:ParameterFile>C:\Code\WideField\BaslerConfig\BehaviorCam2.pfs</p1:ParameterFile>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:ElementIndex" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:ImageWriter">
          <cv:Path>\\.\pipe\video2</cv:Path>
          <cv:Suffix>None</cv:Suffix>
          <cv:Overwrite>false</cv:Overwrite>
        </Combinator>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>VideoFileName</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>DirName</Name>
            </Expression>
            <Expression xsi:type="scr:PythonTransform">
              <scr:Name>arguments</scr:Name>
              <scr:Description>arg</scr:Description>
              <scr:Script>
from datetime import datetime

def getOutputType():
    return clr.GetClrType(str)

def process(value):
  directory=value;
  timestamp = datetime.now().strftime("%H%M%S")
  arg = str.format(r'-y -f rawvideo -vcodec rawvideo -s 720x540 -pix_fmt gray -i \\.\pipe\video1 {0}\BehaviorCam1_{1}.mp4',directory,timestamp)
  return arg
</scr:Script>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Arguments" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:StartProcess">
          <io:FileName>ffmpeg</io:FileName>
          <io:Arguments>-y -f rawvideo -vcodec rawvideo -s 720x540 -pix_fmt gray -i \\.\pipe\video1 E:\test\\BehaviorCam1_170132.mp4</io:Arguments>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:DelaySubscription">
          <rx:DueTime>PT1S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>VideoFileName</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>DirName</Name>
            </Expression>
            <Expression xsi:type="scr:PythonTransform">
              <scr:Name>arguments</scr:Name>
              <scr:Description>arg</scr:Description>
              <scr:Script>
from datetime import datetime

def getOutputType():
    return clr.GetClrType(str)

def process(value):
  directory=value;
  timestamp = datetime.now().strftime("%H%M%S")
  arg = str.format(r'-y -f rawvideo -vcodec rawvideo -s 720x540 -pix_fmt gray -i \\.\pipe\video2 {0}\BehaviorCam2_{1}.mp4',directory,timestamp)
  return arg
</scr:Script>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Arguments" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:StartProcess">
          <io:FileName>ffmpeg</io:FileName>
          <io:Arguments>-y -f rawvideo -vcodec rawvideo -s 720x540 -pix_fmt gray -i \\.\pipe\video2 E:\test\\BehaviorCam2_170132.mp4</io:Arguments>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:DelaySubscription">
          <rx:DueTime>PT1S</rx:DueTime>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="2" To="4" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="6" To="8" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>